# Generated by Configurator on Fri Aug 09 13:53:48 PDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM10,SerialManager,COM10
Device,COM11,SerialManager,COM11
Device,COM12,SerialManager,COM12
Device,COM7,SerialManager,COM7
Device,COM13,SerialManager,COM13
Device,BF-Arduino,Arduino,Arduino-Hub
Device,BF-Arduino-Switch,Arduino,Arduino-Switch
Device,BF-Arduino-Shutter,Arduino,Arduino-Shutter
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,PLogic:E:36,ASITiger,PLogic:E:36
Device,FilterWheel:0:38,ASITiger,FilterWheel:0:38
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,488nm,Sapphire,Sapphire
Device,561nm,Sapphire,Sapphire
Device,458nm,Sapphire,Sapphire
Device,594nm,Sapphire,Sapphire

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,115200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Enable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM10,AnswerTimeout,3000
Property,COM10,BaudRate,19200
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Enable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM11,AnswerTimeout,3000
Property,COM11,BaudRate,19200
Property,COM11,DTR,Disable
Property,COM11,DataBits,8
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Fast USB to Serial,Enable
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1
Property,COM12,AnswerTimeout,3000
Property,COM12,BaudRate,19200
Property,COM12,DTR,Disable
Property,COM12,DataBits,8
Property,COM12,DelayBetweenCharsMs,0.0000
Property,COM12,Fast USB to Serial,Enable
Property,COM12,Handshaking,Off
Property,COM12,Parity,None
Property,COM12,StopBits,1
Property,COM12,Verbose,1
Property,COM7,AnswerTimeout,3000
Property,COM7,BaudRate,19200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Enable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM13,AnswerTimeout,500.0000
Property,COM13,BaudRate,57600
Property,COM13,DTR,Disable
Property,COM13,DataBits,8
Property,COM13,DelayBetweenCharsMs,0.0000
Property,COM13,Fast USB to Serial,Disable
Property,COM13,Handshaking,Off
Property,COM13,Parity,None
Property,COM13,StopBits,1
Property,COM13,Verbose,1
Property,BF-Arduino,Logic,Normal
Property,BF-Arduino,Port,COM13
Property,TigerCommHub,Port,COM3
Property,PLogic:E:36,PLogicMode,None
Property,488nm,Port,COM7
Property,561nm,Port,COM12
Property,458nm,Port,COM10
Property,594nm,Port,COM11

# Pre-init settings for COM ports

# Hub (parent) references
Parent,BF-Arduino-Switch,BF-Arduino
Parent,BF-Arduino-Shutter,BF-Arduino
Parent,XYStage:XY:31,TigerCommHub
Parent,ZStage:Z:32,TigerCommHub
Parent,PLogic:E:36,TigerCommHub
Parent,FilterWheel:0:38,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,488nm,200.0
Delay,561nm,200.0
Delay,458nm,200.0
Delay,594nm,200.0

# Focus directions
FocusDirection,ZStage:Z:32,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,BF-Arduino-Shutter
Property,Core,Focus,ZStage:Z:32
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# BF-Arduino-Switch
Label,BF-Arduino-Switch,63,63
Label,BF-Arduino-Switch,62,62
Label,BF-Arduino-Switch,61,61
Label,BF-Arduino-Switch,60,60
Label,BF-Arduino-Switch,59,59
Label,BF-Arduino-Switch,58,58
Label,BF-Arduino-Switch,57,57
Label,BF-Arduino-Switch,56,56
Label,BF-Arduino-Switch,55,55
Label,BF-Arduino-Switch,54,54
Label,BF-Arduino-Switch,53,53
Label,BF-Arduino-Switch,52,52
Label,BF-Arduino-Switch,51,51
Label,BF-Arduino-Switch,50,50
Label,BF-Arduino-Switch,49,49
Label,BF-Arduino-Switch,48,48
Label,BF-Arduino-Switch,47,47
Label,BF-Arduino-Switch,46,46
Label,BF-Arduino-Switch,45,45
Label,BF-Arduino-Switch,44,44
Label,BF-Arduino-Switch,43,43
Label,BF-Arduino-Switch,42,42
Label,BF-Arduino-Switch,41,41
Label,BF-Arduino-Switch,40,40
Label,BF-Arduino-Switch,39,39
Label,BF-Arduino-Switch,38,38
Label,BF-Arduino-Switch,37,37
Label,BF-Arduino-Switch,36,36
Label,BF-Arduino-Switch,35,35
Label,BF-Arduino-Switch,34,34
Label,BF-Arduino-Switch,33,33
Label,BF-Arduino-Switch,32,32
Label,BF-Arduino-Switch,31,31
Label,BF-Arduino-Switch,30,30
Label,BF-Arduino-Switch,29,29
Label,BF-Arduino-Switch,28,28
Label,BF-Arduino-Switch,27,27
Label,BF-Arduino-Switch,26,26
Label,BF-Arduino-Switch,25,25
Label,BF-Arduino-Switch,24,24
Label,BF-Arduino-Switch,23,23
Label,BF-Arduino-Switch,22,22
Label,BF-Arduino-Switch,21,21
Label,BF-Arduino-Switch,20,20
Label,BF-Arduino-Switch,19,19
Label,BF-Arduino-Switch,18,18
Label,BF-Arduino-Switch,17,17
Label,BF-Arduino-Switch,16,16
Label,BF-Arduino-Switch,15,15
Label,BF-Arduino-Switch,14,14
Label,BF-Arduino-Switch,13,13
Label,BF-Arduino-Switch,12,12
Label,BF-Arduino-Switch,11,11
Label,BF-Arduino-Switch,10,10
Label,BF-Arduino-Switch,9,9
Label,BF-Arduino-Switch,8,8
Label,BF-Arduino-Switch,7,7
Label,BF-Arduino-Switch,6,6
Label,BF-Arduino-Switch,5,5
Label,BF-Arduino-Switch,4,4
Label,BF-Arduino-Switch,3,3
Label,BF-Arduino-Switch,2,2
Label,BF-Arduino-Switch,1,1
Label,BF-Arduino-Switch,0,0
# FilterWheel:0:38
Label,FilterWheel:0:38,7,Position-8
Label,FilterWheel:0:38,6,Position-7
Label,FilterWheel:0:38,5,Position-6
Label,FilterWheel:0:38,4,Position-5
Label,FilterWheel:0:38,3,Position-4
Label,FilterWheel:0:38,2,Position-3
Label,FilterWheel:0:38,1,Position-2
Label,FilterWheel:0:38,0,Position-1

# Configuration presets
# Group: Filter
# Preset: 585-40m
ConfigGroup,Filter,585-40m,FilterWheel:0:38,State,2

# Preset: empty-2
ConfigGroup,Filter,empty-2,FilterWheel:0:38,State,6

# Preset: blocked
ConfigGroup,Filter,blocked,FilterWheel:0:38,State,5

# Preset: polarizer
ConfigGroup,Filter,polarizer,FilterWheel:0:38,State,7

# Preset: empty-1
ConfigGroup,Filter,empty-1,FilterWheel:0:38,State,4

# Preset: 632-60m
ConfigGroup,Filter,632-60m,FilterWheel:0:38,State,3

# Preset: 480-30m
ConfigGroup,Filter,480-30m,FilterWheel:0:38,State,0

# Preset: 520-40m
ConfigGroup,Filter,520-40m,FilterWheel:0:38,State,1


# Group: Channel
# Preset: 561nm - 520-40m
ConfigGroup,Channel,561nm - 520-40m,FilterWheel:0:38,State,1
ConfigGroup,Channel,561nm - 520-40m,Core,Shutter,561nm

# Preset: DIC
ConfigGroup,Channel,DIC,FilterWheel:0:38,State,7
ConfigGroup,Channel,DIC,Core,Shutter,BF-Arduino-Shutter

# Preset: GFP
ConfigGroup,Channel,GFP,FilterWheel:0:38,State,1
ConfigGroup,Channel,GFP,Core,Shutter,488nm

# Preset: 488nm - 632-60m
ConfigGroup,Channel,488nm - 632-60m,FilterWheel:0:38,State,3
ConfigGroup,Channel,488nm - 632-60m,Core,Shutter,488nm

# Preset: 594nm-632-60m
ConfigGroup,Channel,594nm-632-60m,FilterWheel:0:38,State,3
ConfigGroup,Channel,594nm-632-60m,Core,Shutter,594nm

# Preset: 488nm - 585-40m
ConfigGroup,Channel,488nm - 585-40m,FilterWheel:0:38,State,2
ConfigGroup,Channel,488nm - 585-40m,Core,Shutter,488nm

# Preset: CFP
ConfigGroup,Channel,CFP,FilterWheel:0:38,State,0
ConfigGroup,Channel,CFP,Core,Shutter,458nm

# Preset: 561nm - 585-40m
ConfigGroup,Channel,561nm - 585-40m,FilterWheel:0:38,State,2
ConfigGroup,Channel,561nm - 585-40m,Core,Shutter,561nm

# Preset: RFP
ConfigGroup,Channel,RFP,FilterWheel:0:38,State,3
ConfigGroup,Channel,RFP,Core,Shutter,561nm

# Preset: BF
ConfigGroup,Channel,BF,FilterWheel:0:38,State,4
ConfigGroup,Channel,BF,Core,Shutter,BF-Arduino-Shutter


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,BF-Arduino-Switch,State,1
ConfigGroup,System,Startup,Core,TimeoutMs,120000
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,FilterWheel:0:38,State,4

# Preset: Shutdown
ConfigGroup,System,Shutdown,BF-Arduino-Switch,State,0
ConfigGroup,System,Shutdown,Core,TimeoutMs,15000
ConfigGroup,System,Shutdown,Core,ChannelGroup,Channel
ConfigGroup,System,Shutdown,FilterWheel:0:38,State,4



# PixelSize settings
# Resolution preset: 40x
ConfigPixelSize,40x,XYStage:XY:31,DriftErrorX-E(um),0.2000
PixelSize_um,40x,0.1625
PixelSizeAffine,40x,0.1625,0.0,0.0,0.0,0.1625,0.0

