# Generated by Configurator on Wed Apr 03 13:41:19 PDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM10,SerialManager,COM10
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,pco_camera,PCO_Camera,pco_camera
Device,488nm,Sapphire,Sapphire
Device,561nm,Sapphire,Sapphire
Device,BF-Arduino,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,XStage,ASIStage,ZStage
Device,ASI-XYStage,ASIStage,XYStage
Device,TigerCommHub,ASITiger,TigerCommHub
Device,PLogic:E:36,ASITiger,PLogic:E:36
Device,ASIFWController,ASIFW1000,ASIFWController
Device,ASIFilterWheel,ASIFW1000,ASIFilterWheel
Device,YStage,Utilities,Single Axis Stage
Device,ZStage,Utilities,Single Axis Stage
Device,XYStage,Utilities,Combo XY Stage

# Pre-init settings for devices
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,9600
Property,COM10,DTR,Disable
Property,COM10,DataBits,8
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Fast USB to Serial,Disable
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,115200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,None
Property,COM7,StopBits,1
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,19200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,pco_camera,DemoMode,Off
Property,488nm,Port,COM4
Property,561nm,Port,COM3
Property,BF-Arduino,Logic,Normal
Property,BF-Arduino,Port,COM5
Property,XStage,Axis,Z
Property,XStage,Port,COM6
Property,ASI-XYStage,Port,COM6
Property,TigerCommHub,Port,COM7
Property,PLogic:E:36,PLogicMode,None
Property,ASIFWController,Port,COM10
Property,ASIFilterWheel,ASIFilterWheelNumber,0
Property,YStage,SimulatedStepSizeUm,0.1000
Property,ZStage,SimulatedStepSizeUm,0.1000
Property,XYStage,SimulatedXStepSizeUm,0.0100
Property,XYStage,SimulatedYStepSizeUm,0.0100

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,BF-Arduino
Parent,Arduino-Shutter,BF-Arduino
Parent,PLogic:E:36,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays
Delay,488nm,500.0
Delay,561nm,500.0

# Focus directions
FocusDirection,XStage,0
FocusDirection,YStage,0
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,pco_camera
Property,Core,Shutter,Arduino-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0
# ASIFilterWheel
Label,ASIFilterWheel,7,720-60m
Label,ASIFilterWheel,6,480-30m
Label,ASIFilterWheel,5,590-22m
Label,ASIFilterWheel,4,empty
Label,ASIFilterWheel,3,NF488-15m
Label,ASIFilterWheel,2,632-60m
Label,ASIFilterWheel,1,520-40m
Label,ASIFilterWheel,0,585-40m

# Configuration presets
# Group: Filter
# Preset: 585-40m
ConfigGroup,Filter,585-40m,ASIFilterWheel,Label,585-40m

# Preset: NF488-15m
ConfigGroup,Filter,NF488-15m,ASIFilterWheel,Label,NF488-15m

# Preset: 590-22m
ConfigGroup,Filter,590-22m,ASIFilterWheel,Label,590-22m

# Preset: 632-60m
ConfigGroup,Filter,632-60m,ASIFilterWheel,Label,632-60m

# Preset: 480-30m
ConfigGroup,Filter,480-30m,ASIFilterWheel,Label,480-30m

# Preset: empty
ConfigGroup,Filter,empty,ASIFilterWheel,Label,empty

# Preset: 720-60m
ConfigGroup,Filter,720-60m,ASIFilterWheel,Label,720-60m

# Preset: 520-40m
ConfigGroup,Filter,520-40m,ASIFilterWheel,Label,520-40m


# Group: Channel
# Preset: 561nm - 585-40m
ConfigGroup,Channel,561nm - 585-40m,ASIFilterWheel,Label,585-40m
ConfigGroup,Channel,561nm - 585-40m,Core,Shutter,561nm

# Preset: 488nm - 585-40m
ConfigGroup,Channel,488nm - 585-40m,ASIFilterWheel,Label,585-40m
ConfigGroup,Channel,488nm - 585-40m,Core,Shutter,488nm

# Preset: RFP
ConfigGroup,Channel,RFP,ASIFilterWheel,Label,632-60m
ConfigGroup,Channel,RFP,Core,Shutter,561nm

# Preset: GFP
ConfigGroup,Channel,GFP,ASIFilterWheel,Label,520-40m
ConfigGroup,Channel,GFP,Core,Shutter,488nm

# Preset: BF
ConfigGroup,Channel,BF,ASIFilterWheel,Label,empty
ConfigGroup,Channel,BF,Core,Shutter,Arduino-Shutter

# Preset: 488nm - 632-60m
ConfigGroup,Channel,488nm - 632-60m,ASIFilterWheel,Label,632-60m
ConfigGroup,Channel,488nm - 632-60m,Core,Shutter,488nm


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Arduino-Switch,State,63
ConfigGroup,System,Startup,ASI-XYStage,TransposeMirrorX,1
ConfigGroup,System,Startup,ASIFilterWheel,Label,empty
ConfigGroup,System,Startup,YStage,PhysicalAxis,Y
ConfigGroup,System,Startup,YStage,PhysicalStage,ASI-XYStage
ConfigGroup,System,Startup,ZStage,PhysicalAxis,X
ConfigGroup,System,Startup,ZStage,PhysicalStage,ASI-XYStage
ConfigGroup,System,Startup,XYStage,PhysicalStage-X,XStage
ConfigGroup,System,Startup,XYStage,PhysicalStage-Y,YStage
ConfigGroup,System,Startup,XYStage,TransposeMirrorX,1
ConfigGroup,System,Startup,Core,ChannelGroup,Channel
ConfigGroup,System,Startup,Core,Focus,ZStage
ConfigGroup,System,Startup,Core,TimeoutMs,15000
ConfigGroup,System,Startup,Core,XYStage,XYStage

# Preset: Shutdown
ConfigGroup,System,Shutdown,Arduino-Switch,State,0
ConfigGroup,System,Shutdown,ASI-XYStage,TransposeMirrorX,1
ConfigGroup,System,Shutdown,ASIFilterWheel,Label,480-30m
ConfigGroup,System,Shutdown,YStage,PhysicalAxis,Y
ConfigGroup,System,Shutdown,YStage,PhysicalStage,ASI-XYStage
ConfigGroup,System,Shutdown,ZStage,PhysicalAxis,X
ConfigGroup,System,Shutdown,ZStage,PhysicalStage,ASI-XYStage
ConfigGroup,System,Shutdown,XYStage,PhysicalStage-X,XStage
ConfigGroup,System,Shutdown,XYStage,PhysicalStage-Y,YStage
ConfigGroup,System,Shutdown,XYStage,TransposeMirrorX,1
ConfigGroup,System,Shutdown,Core,ChannelGroup,Channel
ConfigGroup,System,Shutdown,Core,Focus,ZStage
ConfigGroup,System,Shutdown,Core,TimeoutMs,15000
ConfigGroup,System,Shutdown,Core,XYStage,XYStage



# PixelSize settings
# Resolution preset: 40x
ConfigPixelSize,40x,XYStage,Scaling-X,1.0000
PixelSize_um,40x,0.1625
PixelSizeAffine,40x,1.0,0.0,0.0,0.0,1.0,0.0

